include "PC_Globals.pcl";
include "PC_Helpers.pcl";

preset int Age = 18;
preset int Gender = 1;	# Female = 2;Male = 1
preset int Group_No = 1;
preset int Stim_Group = 1;

##  Set first stim
if (Stim_Group != 1) then
	CSm.set_filename("Dog1.jpg");
	CSm.load();
	CSp.set_filename("Dog6.jpg");
	CSp.load();
end;

display_window.set_font_style(display_style_bold);
# use subject name + time and data for filenames
string logfile_name;
logfile_name = logfile.subject() + "_pc_" + date_time("hhnnss_dd-mm-yyyy");

# set logfile name for this trial
logfile.set_filename(logfile_name + ".log");
int subid = int(logfile.subject());
#------------------------------------------------------------------------------
# setup text log file name (for saving the 150 trials for this subject)
#------------------------------------------------------------------------------
# use logfile name for filename but with "txt" extension

output_file out = new output_file;
out.open(logfile.subject()+"_pc" + ".xls");
out.print("student number: "+logfile.subject()+"\t"+"Age: "+string(Age)+"\t"+"Gender: "+string(Gender)+"\t"+"Group: "+string(Group_No)+"\tStim Group: "+string(Stim_Group)+"\n");	#print the trial index
out.print("Phase\tTrial Number\tDog\tExpectancy\tEvaluation\tExtinction Dog\tTrial Type\n");	#print the trial index

#------------------------------------------------------------------------------
# Setup output port
#------------------------------------------------------------------------------
if (output_port_manager.port_count() == 0) then
   term.print( "Forgot to add an output port!" )
end;
output_port oport = output_port_manager.get_port( 1 );
oport.set_pulse_width( 5 );
oport.send_code( 255 );

fixation_trial.set_duration(5000/SPEED_UP);
CSp_trial.set_duration(10000/SPEED_UP);
CSm_trial.set_duration(8000/SPEED_UP);
CSm_trial2.set_duration(3000/SPEED_UP);
blank_trial.set_duration(5000/SPEED_UP);
CSm_rating_trial.set_duration(5000/SPEED_UP);
CSp_rating_trial.set_duration(5000/SPEED_UP);

#ToD:
#load the filler images to the array

array <bool> IS_POLY2[24];
array <bool> IS_POLY3[24];
array <bool> IS_POLY4[24];
array <bool> IS_POLY5[24];

term.print_line("Aqui Test");
loop
	int i = 1
until 
	i > 4
begin
	term.print_line(i);
	build_stim_list(NUM_AQUI, IS_CSM);
	sort_stim_list(NUM_AQUI, Group_No, IS_CSM);
	check_bool_array(IS_CSM);
	i = i + 1
end;

term.print_line("Ext Test");
loop
	int i = 1
until 
	i > 4
begin
	term.print_line(i);
	build_stim_list(NUM_EXTINCT, IS_CSM);
	sort_stim_list(NUM_EXTINCT, Group_No, IS_CSM);
	check_bool_array(IS_CSM);
	i = i + 1
end;

term.print_line("Gen Test");
loop
	int i = 1
until 
	i > 4
begin
	term.print_line(i);
	build_stim_list(NUM_GENERALISATION, IS_CSDC);
	sort_stim_list(NUM_GENERALISATION, Group_No, IS_CSDC);
	check_bool_array(IS_CSDC);
	i = i + 1
end;

term.print_line("Ext Test");
loop
	int i = 1
until 
	i > 4
begin
	term.print_line(i);
	build_stim_list(NUM_TEST_EXT, IS_CSM_TEST);
	sort_stim_list(NUM_TEST_EXT, Group_No, IS_CSM_TEST);
	check_bool_array(IS_CSM_TEST);
	i = i + 1
end;

build_stim_list(NUM_AQUI, IS_CSM);
#print_1d_bool_array(IS_CSM);
sort_stim_list(NUM_AQUI, Group_No, IS_CSM);
##  Build Extinction Inter Trial Stim List
build_stim_list(NUM_EXTINCT,IS_CSDA);
sort_stim_list(NUM_EXTINCT, Group_No, IS_CSDA);

build_stim_list(NUM_AQUI, IS_CSM);
sort_stim_list(NUM_AQUI, Group_No, IS_CSM);
##  Build Extinction Inter Trial Stim List
build_stim_list(NUM_EXTINCT,IS_CSDA);
sort_stim_list(NUM_EXTINCT, random(1,2), IS_CSDA);

# for testing purpose
/*build_stim_list(NUM_AQUI, IS_POLY2);
sort_stim_list(NUM_AQUI, Group_No, IS_POLY2);
build_stim_list(NUM_AQUI, IS_POLY3);
sort_stim_list(NUM_AQUI, Group_No, IS_POLY3);
build_stim_list(NUM_AQUI, IS_POLY4);
sort_stim_list(NUM_AQUI, Group_No, IS_POLY4);
build_stim_list(NUM_AQUI, IS_POLY5);
sort_stim_list(NUM_AQUI, Group_No, IS_POLY5);
loop 
	int j = 1;
until 
	j > NUM_AQUI
begin
	term.print_line(string(j) + ":\t" + string(IS_POLY[j]) + "\t" + string(IS_POLY2[j]) + "\t" + string(IS_POLY3[j]) + "\t" + string(IS_POLY4[j]) + "\t" + string(IS_POLY5[j]));
	j=j+1;
end;*/

int phase = 1;
int dog = 0;
int rndval = 0;
int first = 0;
int second = 0;
if (Group_No == 1)then
	first = 1;
	second = 2;
else
	first = 2;
	second = 1;
end;


term.print("Started\n");
#start the actual experiment
#PRACTICE_LIST.shuffle();
welcome_1.present();
welcome_2.present();
welcome_3.present();
scale_instruction_trial.present();
int response_button1;
int response_button2;

############## Trials Start Here #################
if (!SKIP_TEST) then
	CSp_trial.present();
	if (bool( response_manager.response_count() )) then
		stimulus_data last = stimulus_manager.last_stimulus_data();
		CSp_rate_pic.remove_part(2);
		if (10000-last.reaction_time()>50) then
		CSp_trial.set_duration(10000-last.reaction_time());
		end;
		CSp_trial.present();
		term.print_line(string( last.reaction_time() ));
		CSp_rate_pic.insert_part(2, rate_now_text,0, 370);
	end;
	dog = 1;
	#response_button1 = get_response();
	blank_trial.present();
	rndval = random(5000, 15000)/SPEED_UP;
	CSp_rating_trial.set_duration(rndval);
	#triangle_rating_trial.present();

	CSp_rating_trial.present();
	if (bool( response_manager.response_count() )) then
		stimulus_data last = stimulus_manager.last_stimulus_data();
		response_pic_CSp.remove_part(3);
		response_pic_CSp.remove_part(2);
		if (5000-last.reaction_time()>50) then
		CSp_rating_trial.set_duration(5000-last.reaction_time());
		end;
		CSp_rating_trial.present();
		response_pic_CSp.insert_part(2, reaction_text, 0, 370);
		response_pic_CSp.insert_part(3, scale_bmp, 0, -425);
	end;						

	break_trial.present();
end;

print_1d_bool_array(IS_CSM);

phase = 1;
string trial_type = "";

############## Aquisition Phase ##################
if (!SKIP_AQUI) then
	int i=0;
	loop 
		i = 1;
	until 
		i > NUM_AQUI
	begin
		
		fixation_trial.present();
		
			if (IS_CSM[i] == false) then
				#
				CSp_trial.set_duration(8000);
				oport.send_code( 2 );
				CSp_trial.present();
				if (bool( response_manager.response_count() )) then
				#if (bool( stimulus_manager.stimulus_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					CSp_rate_pic.remove_part(3);
					CSp_rate_pic.remove_part(2);
					if (10000-last.reaction_time()>50) then
						CSp_bare_trial.set_duration(10000-last.reaction_time());
						CSp_bare_trial.present();
					end;
					term.print_line("event1");
					CSp_rate_pic.insert_part(2, rate_now_text,0, 370);
					CSp_rate_pic.insert_part(3, expect_bmp, 0, -425);
					response_button1 = last.button();
				end;
				oport.send_code( 2 );
				dog = 1;
				if (Stim_Group != 1) then
					dog = 2;
				end;
				trial_type = "CS-";
			else
				
				CSm_trial.set_duration(8000);
				oport.send_code( 1 );
				CSm_trial.present();
				if (bool( response_manager.response_count() )) then
				#if (bool( stimulus_manager.stimulus_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					CSm_rate_pic.remove_part(3);
					CSm_rate_pic.remove_part(2);
					if (8000-last.reaction_time()>50) then
						CSm_bare_trial.set_duration(8000-last.reaction_time());
						CSm_bare_trial.present();
					end;
					term.print_line("event2");
					CSm_rate_pic.insert_part(2, rate_now_text,0, 370);
					CSm_rate_pic.insert_part(3, expect_bmp, 0, -425);
					response_button1 = last.button();
				end;
				
				#response_button1 = get_response();
				oport.send_code( 64 );
				CSm_trial2.present();
				oport.send_code( 1 );
				dog = 2;
				if (Stim_Group != 1) then
					dog = 1;
				end;
				trial_type = "CS+";
				
			end;
			#if (response_button1 == 0)then
			#	response_button1 = get_response();
			#end;
			blank_trial.present();
			rndval = random(5000, 15000)/SPEED_UP;
			CSm_rating_trial.set_duration(rndval);
			CSp_rating_trial.set_duration(rndval);
			if (IS_CSM[i] == false) then
				oport.send_code( 2 );
				CSp_rating_trial.present();
				if (bool( response_manager.response_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					response_pic_CSp.remove_part(3);
					response_pic_CSp.remove_part(2);
					if (5000-last.reaction_time()>50) then
					CSp_rating_trial.set_duration(5000-last.reaction_time());
					end;
					CSp_rating_trial.present();
					term.print_line("event4");
					response_pic_CSp.insert_part(2, reaction_text, 0, 370);
					response_pic_CSp.insert_part(3, expect_bmp, 0, -425);
					response_button2 = last.button();
				end;
				oport.send_code( 2 );
			else
				oport.send_code( 1 );
				CSm_rating_trial.present();
				if (bool( response_manager.response_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					response_pic_CSm.remove_part(3);
					response_pic_CSm.remove_part(2);
					if (5000-last.reaction_time()>50) then
						CSm_rating_trial.set_duration(5000-last.reaction_time());
					end;
					CSm_rating_trial.present();
					term.print_line("event3");
					response_pic_CSm.insert_part(2, reaction_text, 0, 370);
					response_pic_CSm.insert_part(3, expect_bmp, 0, -425);
					response_button2 = last.button();
				end;
				oport.send_code( 1 );
			end;
		#end;
		
		#response_button2 = get_response();
		term.print(response_button2);
		
		#"Phase\tTrial Number\tDog\tExpectancy\tEvaluation\n"
		save_trail_data(phase, i, dog, response_button1, response_button2, out, trial_type);
		term.print("\n");
		i = i + 1;
	end;
	break_trial.present();
end;
############## Aquisition Phase ##################
build_stim_list(NUM_EXTINCT, IS_CSM);
sort_stim_list(NUM_EXTINCT, Group_No, IS_CSM);
CSm_trial.set_duration(10000/SPEED_UP);
phase = 2;
term.print_line("CSDA:  ");
print_1d_bool_array(IS_CSDA);
int dog2 = 0;		#  Inter trial stim
############## Extinction  Phase ##################
if (!SKIP_EXTINCT) then
	loop 
		int i = 1;
	until 
		i > NUM_EXTINCT
	begin
		fixation_trial.present();
		
			if (IS_CSM[i] == false) then 
				CSp_trial.set_duration(8000);
				oport.send_code( 2 );
				CSp_trial.present();
				if (bool( response_manager.response_count() )) then
				#if (bool( stimulus_manager.stimulus_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					CSp_rate_pic.remove_part(2);
					if (8000-last.reaction_time()>50) then
						CSp_bare_trial.set_duration(8000-last.reaction_time());
						CSp_bare_trial.present();
					end;
					term.print_line("event1");
					CSp_rate_pic.insert_part(2, rate_now_text,0, 425);
					response_button1 = last.button();
				end;
				oport.send_code( 2 );
				dog = 1;
				if (Stim_Group != 1) then
					dog = 2;
				end;
				trial_type = "CS-";
			else
				CSm_trial.set_duration(8000);
				oport.send_code( 1 );
				CSm_trial.present();
				if (bool( response_manager.response_count() )) then
				#if (bool( stimulus_manager.stimulus_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					CSm_rate_pic.remove_part(2);
					if (8000-last.reaction_time()>50) then
						CSm_bare_trial.set_duration(8000-last.reaction_time());
						CSm_bare_trial.present();
					end;
					term.print_line("event2");
					CSm_rate_pic.insert_part(2, rate_now_text,0, 425);
					response_button1 = last.button();
				end;
				oport.send_code( 1 );
				dog = 2;
				if (Stim_Group != 1) then
					dog = 1;
				end;
				trial_type = "CS+";
			end;
			blank_trial.present();
			rndval = random(5000, 15000)/SPEED_UP;
			CSm_rating_trial.set_duration(rndval);
			CSp_rating_trial.set_duration(rndval);
			if (IS_CSM[i] == false) then 
				oport.send_code( 2 );
				CSp_rating_trial.present();
				if (bool( response_manager.response_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					response_pic_CSp.remove_part(3);
					response_pic_CSp.remove_part(2);
					if (5000-last.reaction_time()>50) then
					CSp_rating_trial.set_duration(5000-last.reaction_time());
					end;
					CSp_rating_trial.present();
					term.print_line("event4");
					response_pic_CSp.insert_part(2, reaction_text, 0, 370);
					response_pic_CSp.insert_part(3, scale_bmp, 0, -425);
					response_button2 = last.button();
				end;
				oport.send_code( 2 );
			else
				oport.send_code( 1 );
				CSm_rating_trial.present();
				if (bool( response_manager.response_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					response_pic_CSm.remove_part(3);
					response_pic_CSm.remove_part(2);
					if (5000-last.reaction_time()>50) then
					CSm_rating_trial.set_duration(5000-last.reaction_time());
					end;
					CSm_rating_trial.present();
					term.print_line("event3");
					response_pic_CSm.insert_part(2, reaction_text, 0, 370);
					response_pic_CSm.insert_part(3, scale_bmp, 0, -425);
					response_button2 = last.button();
				end;
				oport.send_code( 1 );
			end;
			
		if (IS_CSDA[i])then		##  Inter trial stim
			fixation_trial.set_duration(15000);
			fixation_trial.present();
			oport.send_code( 4 );
			CSDA_bare_trial.present();
			oport.send_code( 4 );
			dog2 = 3;
		else
			fixation_trial.set_duration(15000);
			fixation_trial.present();
			oport.send_code( 8 );
			CSDB_bare_trial.present();
			oport.send_code( 8 );
			dog2 = 4;
		end;
		
		#response_button2 = get_response();
		term.print(response_button2);
		
		#"Phase\tTrial Number\tDog\tExpectancy\tEvaluation\n"
		save_extinction_trail_data(phase, i, dog, response_button1, response_button2, out, dog2, trial_type);
		term.print("\n");
		i = i + 1;
	end;	
	break_trial.present();
end;
############## Extinction  Phase ##################
fixation_trial.set_duration(5000);
phase = 3;
############## Reinstatement  Phase ###############
#############  NOT USED IN GENERALISATION  ########
if (!SKIP_REIN) then
	loop
		int i = 1
	until 
		i > NUM_REIN
	begin
		if (Group_No == 1) then
			tone_reinstatement_trial.present();
			blank_reinstatement_trial.present();
		else
			blank_reinstatement_trial.present();
			blank_reinstatement_trial.present();
		end;
		i = i + 1;
	end;
	break_trial.present();
end;
############## Reinstatement  Phase ###############
build_test_stim_list(NUM_GENERALISATION, IS_CSDC, Group_No);
CSm_trial.set_duration(10000/SPEED_UP);
phase = 3;
print_1d_bool_array(IS_CSDC);
#################### Generalisation  Phase ##################
if (!SKIP_GEN)then
	loop 
		int i = 1;
	until 
		i > NUM_GENERALISATION
	begin
		fixation_trial.present();
		
			if (IS_CSDC[i] == false) then 
				CSDC_trial.set_duration(8000);
				oport.send_code( 16 );
				CSDC_trial.present();
				if (bool( response_manager.response_count() )) then
				#if (bool( stimulus_manager.stimulus_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					CSDC_rate_pic.remove_part(2);
					if (8000-last.reaction_time()>50) then
						CSDC_bare_trial.set_duration(8000-last.reaction_time());
						CSDC_bare_trial.present();
					end;
					term.print_line("CSDCEvent");
					CSDC_rate_pic.insert_part(2, rate_now_text,0, 370);
					response_button1 = last.button();
				end;
				oport.send_code( 16 );
				dog = 5;
				trial_type = "CSDC";
			else
				CSDD_trial.set_duration(8000);
				oport.send_code( 32 );
				CSDD_trial.present();
				if (bool( response_manager.response_count() )) then
				#if (bool( stimulus_manager.stimulus_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					CSDD_rate_pic.remove_part(2);
					if (8000-last.reaction_time()>50) then
						CSDD_bare_trial.set_duration(8000-last.reaction_time());
						CSDD_bare_trial.present();
					end;
					term.print_line("CSDDEvent");
					CSDD_rate_pic.insert_part(2, rate_now_text,0, 370);
					response_button1 = last.button();
				end;
				oport.send_code( 32 );
				dog = 6;
				trial_type = "CSDD";
			end;
			blank_trial.present();
			rndval = random(5000, 15000)/SPEED_UP;
			CSDC_rating_trial.set_duration(rndval);
			CSDD_rating_trial.set_duration(rndval);
			if (IS_CSDC[i] == false) then 
				oport.send_code( 16 );
				CSDC_rating_trial.present();
				if (bool( response_manager.response_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					response_pic_CSDC.remove_part(3);
					response_pic_CSDC.remove_part(2);
					CSDC_rating_trial.set_duration(5000-last.reaction_time());
					CSDC_rating_trial.present();
					term.print_line("CSDCEvent");
					response_pic_CSDC.insert_part(2, reaction_text, 0, 370);
					response_pic_CSDC.insert_part(3, scale_bmp, 0, -425);
					response_button2 = last.button();
				end;
				oport.send_code( 16 );
			else
				oport.send_code( 32 );
				CSDD_rating_trial.present();
				if (bool( response_manager.response_count() )) then
					stimulus_data last = stimulus_manager.last_stimulus_data();
					response_pic_CSDD.remove_part(3);
					response_pic_CSDD.remove_part(2);
					CSDD_rating_trial.set_duration(5000-last.reaction_time());
					CSDD_rating_trial.present();
					term.print_line("CSDDEvent");
					response_pic_CSDD.insert_part(2, reaction_text, 0, 370);
					response_pic_CSDD.insert_part(3, scale_bmp, 0, -425);
					response_button2 = last.button();
				end;
				oport.send_code( 32 );
			end;
		#end;
		
		#response_button2 = get_response();
		term.print(response_button2);
		
		#"Phase\tTrial Number\tDog\tExpectancy\tEvaluation\n"
		save_trail_data(phase, i, dog, response_button1, response_button2, out, trial_type);
		term.print("\n");
		i = i + 1;
	end;	
	break_trial.present();
end;
#################### Generalisation  Phase ##################
build_test_stim_list(NUM_GENERALISATION, IS_CSM_TEST, Group_No);
CSm_trial.set_duration(10000/SPEED_UP);
phase = 4;
print_1d_bool_array(IS_CSM_TEST);
#################### Test  Phase ##################
loop 
	int i = 1;
until 
	i > NUM_TEST_EXT
begin
	fixation_trial.present();

		if (IS_CSM_TEST[i] == false) then 
			CSp_trial.set_duration(8000);
			oport.send_code( 2 );
			CSp_trial.present();
			if (bool( response_manager.response_count() )) then
			#if (bool( stimulus_manager.stimulus_count() )) then
				stimulus_data last = stimulus_manager.last_stimulus_data();
				CSp_rate_pic.remove_part(2);
				if (8000-last.reaction_time()>50) then
					CSp_bare_trial.set_duration(8000-last.reaction_time());
					CSp_bare_trial.present();
				end;
				term.print_line("event1");
				CSp_rate_pic.insert_part(2, rate_now_text,0, 370);
				response_button1 = last.button();
			end;
			oport.send_code( 2 );
			dog = 1;
			if (Stim_Group != 1) then
					dog = 2;
				end;
				trial_type = "CS-";
		else
			CSm_trial.set_duration(8000);
			oport.send_code( 1 );
			CSm_trial.present();
			if (bool( response_manager.response_count() )) then
			#if (bool( stimulus_manager.stimulus_count() )) then
				stimulus_data last = stimulus_manager.last_stimulus_data();
				CSm_rate_pic.remove_part(2);
				if (8000-last.reaction_time()>50) then
					CSm_bare_trial.set_duration(8000-last.reaction_time());
					CSm_bare_trial.present();
				end;
				term.print_line("event2");
				CSm_rate_pic.insert_part(2, rate_now_text,0, 425);
				response_button1 = last.button();
			end;
			oport.send_code( 1 );
			dog = 2;
			if (Stim_Group != 1) then
				dog = 1;
			end;
			trial_type = "CS+";
		end;
		blank_trial.present();
		rndval = random(5000, 15000)/SPEED_UP;
		CSm_rating_trial.set_duration(rndval);
		CSm_rating_trial.set_duration(rndval);
		if (IS_CSM_TEST[i] == false) then 
			oport.send_code( 2 );
			CSp_rating_trial.present();
			if (bool( response_manager.response_count() )) then
				stimulus_data last = stimulus_manager.last_stimulus_data();
				response_pic_CSp.remove_part(3);
				response_pic_CSp.remove_part(2);
				CSp_rating_trial.set_duration(5000-last.reaction_time());
				CSp_rating_trial.present();
				term.print_line("event4");
				response_pic_CSp.insert_part(2, reaction_text, 0, 370);
				response_pic_CSp.insert_part(3, scale_bmp, 0, -425);
				response_button2 = last.button();
			end;
			oport.send_code( 2 );
		else
			oport.send_code( 1 );
			CSm_rating_trial.present();
			if (bool( response_manager.response_count() )) then
				stimulus_data last = stimulus_manager.last_stimulus_data();
				response_pic_CSm.remove_part(3);
				response_pic_CSm.remove_part(2);
				CSm_rating_trial.set_duration(5000-last.reaction_time());
				CSm_rating_trial.present();
				term.print_line("event3");
				response_pic_CSm.insert_part(2, reaction_text, 0, 370);
			   response_pic_CSm.insert_part(3, scale_bmp, 0, -425);
				response_button2 = last.button();
			end;
			oport.send_code( 1 );
		end;
	#end;
	
	#response_button2 = get_response();
	term.print(response_button2);
	
	#"Phase\tTrial Number\tDog\tExpectancy\tEvaluation\n"
	save_trail_data(phase, i, dog, response_button1, response_button2, out, trial_type);
	term.print("\n");
	i = i + 1;
end;	
#################### Test  Phase ##################

Goodbye_trial.present();